<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Bonsai.Sleap"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\neurogears\Documents\git\SLEAPyBonsai\talmodataset\190719_090330_wt_18159206_rig1.2@15000-17560.mp4</cv:FileName>
          <cv:PlaybackRate>100</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>true</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CropCenter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>145</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MorphologicalOperator">
                <cv:Size>
                  <cv:Width>3</cv:Width>
                  <cv:Height>3</cv:Height>
                </cv:Size>
                <cv:Anchor>
                  <cv:X>-1</cv:X>
                  <cv:Y>-1</cv:Y>
                </cv:Anchor>
                <cv:Shape>Rectangle</cv:Shape>
                <cv:Iterations>3</cv:Iterations>
                <cv:Operation>Erode</cv:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>200</cv:MinArea>
                <cv:MaxArea>2000</cv:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CropCentered">
                <p1:Size>
                  <p1:Width>160</p1:Width>
                  <p1:Height>160</p1:Height>
                </p1:Size>
                <p1:FillColor>
                  <p1:Val0>255</p1:Val0>
                  <p1:Val1>50</p1:Val1>
                  <p1:Val2>50</p1:Val2>
                  <p1:Val3>255</p1:Val3>
                </p1:FillColor>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Length</Selector>
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="IntProperty">
                        <Value>0</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Index">
                <Operand xsi:type="IntProperty">
                  <Value>0</Value>
                </Operand>
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:PredictFullModelPose">
          <sleap:ModelFileName>C:\Users\neurogears\Documents\git\SLEAPyBonsai\talmodataset\noCentroidNetwork\FrozenModel\frozen_graph.pb</sleap:ModelFileName>
          <sleap:PoseConfigFileName>C:\Users\neurogears\Documents\git\SLEAPyBonsai\talmodataset\td_id.fast.v2.210519_111253.multi_class_topdown.n=1800\training_config.json</sleap:PoseConfigFileName>
          <sleap:IdentityMinConfidence xsi:nil="true" />
          <sleap:PartMinConfidence xsi:nil="true" />
          <sleap:ScaleFactor xsi:nil="true" />
          <sleap:ColorConversion xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Count</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Index">
          <Operand xsi:type="IntProperty">
            <Value>0</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Pose</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="sleap:GetBodyPart">
            <sleap:Name>head</sleap:Name>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Name</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Position</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Confidence</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>IdConfidence</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>formatIds</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Skip">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="1" To="3" Label="Source2" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
          <Format>{0}, {1}</Format>
          <Selector>it.Item1, it.Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>IdName</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>RanBatch</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetIdedPose">
          <sleap:Name>female</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Pose</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>wingL</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetIdedPose">
          <sleap:Name>male</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Pose</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>wingR</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="2" To="14" Label="Source1" />
      <Edge From="2" To="15" Label="Source1" />
      <Edge From="2" To="20" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="10" Label="Source1" />
      <Edge From="4" To="13" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>