<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\neurogears\Downloads\190719_090330_wt_18159206_rig1.2@15000-17560.mp4</cv:FileName>
          <cv:PlaybackRate>10</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>true</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:PredictFullModelPose">
          <sleap:ModelFileName>C:\Users\neurogears\Documents\git\SLEAPyBonsai\frozen_models\frozen_graph.pb</sleap:ModelFileName>
          <sleap:PoseConfigFileName>C:\Users\neurogears\Documents\git\SLEAPyBonsai\talmodataset\td_id.fast.v2.210519_111253.multi_class_topdown.n=1800\training_config.json</sleap:PoseConfigFileName>
          <sleap:IdentityMinConfidence xsi:nil="true" />
          <sleap:PartMinConfidence>0.5</sleap:PartMinConfidence>
          <sleap:ScaleFactor xsi:nil="true" />
          <sleap:ColorConversion>Bgr2Gray</sleap:ColorConversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Count</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Index">
          <Operand xsi:type="IntProperty">
            <Value>0</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Pose</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="sleap:GetBodyPart">
            <sleap:Name>head</sleap:Name>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Name</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Position</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Confidence</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>IdConfidence</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>formatIds</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Skip">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="1" To="3" Label="Source2" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
          <Format>{0}, {1}</Format>
          <Selector>it.Item1, it.Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>IdName</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>RanBatch</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetIdedPose">
          <sleap:Name>female</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Pose</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>wingL</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetIdedPose">
          <sleap:Name>male</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Pose</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>wingR</sleap:Name>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="1" To="13" Label="Source1" />
      <Edge From="1" To="14" Label="Source1" />
      <Edge From="1" To="18" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="9" Label="Source1" />
      <Edge From="3" To="12" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>