<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0-rc1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\neurogears\Documents\git\bruno-f-cruz\SLEAPyBonsai\All models\bonsai_test\BermanFlies\072212_163153@10000-13200@0-3199.mp4</cv:FileName>
          <cv:PlaybackRate>10</cv:PlaybackRate>
          <cv:StartPosition>0.5</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>true</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>145</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MorphologicalOperator">
          <cv:Size>
            <cv:Width>3</cv:Width>
            <cv:Height>3</cv:Height>
          </cv:Size>
          <cv:Anchor>
            <cv:X>-1</cv:X>
            <cv:Y>-1</cv:Y>
          </cv:Anchor>
          <cv:Shape>Rectangle</cv:Shape>
          <cv:Iterations>3</cv:Iterations>
          <cv:Operation>Erode</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>200</cv:MinArea>
          <cv:MaxArea>2000</cv:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:TakeBinaryRegions">
          <cv:Count>1</cv:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropCenter">
          <cv:Size>
            <cv:Width>192</cv:Width>
            <cv:Height>192</cv:Height>
          </cv:Size>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:PredictSinglePose">
          <sleap:ModelFileName>C:\Users\neurogears\Documents\git\bruno-f-cruz\SLEAPyBonsai\All models\bonsai_test\bonsai_graphs\single_instance_model\frozen_graph.pb</sleap:ModelFileName>
          <sleap:TrainingConfig>C:\Users\neurogears\Documents\git\bruno-f-cruz\SLEAPyBonsai\All models\bonsai_test\BermanFlies\single_instance_model_fast_unet\training_config.json</sleap:TrainingConfig>
          <sleap:PartMinConfidence xsi:nil="true" />
          <sleap:ScaleFactor xsi:nil="true" />
          <sleap:ColorConversion xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>eyeR</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="9" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>